PsychoPy2experiment version="3.0.0b7"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = matchBF_v1
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Routines
  Routine trial
    ImageComponent image
      image = /Users/ckung/Desktop/MatchBF_exp3/Alice_bird_mod2/061_1_1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.7
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    PolygonComponent fixation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image [set every repeat] = /Users/ckung/Desktop/matchBF_exp3/Alice_bird_mod2/060_3_2.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 0.7
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Flow
  Routine trial
